<OpenViBE-Scenario>
	<FormatVersion>1</FormatVersion>
	<Creator>OpenViBE Designer</Creator>
	<CreatorVersion>2.1.0</CreatorVersion>
	<Settings></Settings>
	<Inputs></Inputs>
	<Outputs></Outputs>
	<Boxes>
		<Box>
			<Identifier>(0x000014bf, 0x000034db)</Identifier>
			<Name>Identity</Name>
			<AlgorithmClassIdentifier>(0x5dffe431, 0x35215c50)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input stream 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input stream 2</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stream 3</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Output stream 1</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Output stream 2</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Output stream 3</Name>
				</Output>
			</Outputs>
			<Attributes>
				<Attribute>
					<Identifier>(0x17ee7c08, 0x94c14893)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>384.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>928.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x30a4e5c9, 0x83502953)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x92ff5cdb, 0x273984ce)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xac367a9c, 0x2da95abe)</Identifier>
					<Value>6</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x00439169)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00005c5c, 0x00007610)</Identifier>
			<Name>Raw</Name>
			<AlgorithmClassIdentifier>(0x0055be5f, 0x087bdd12)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Data</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6ab26b81, 0x0f8c02f3)</TypeIdentifier>
					<Name>Channel Units</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x5de046a6, 0x086340aa)</TypeIdentifier>
					<Name>Display Mode</Name>
					<DefaultValue>Scan</DefaultValue>
					<Value>Scan</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x33a30739, 0x00d5299b)</TypeIdentifier>
					<Name>Auto vertical scale</Name>
					<DefaultValue>Per channel</DefaultValue>
					<Value>Per channel</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Scale refresh interval (secs)</Name>
					<DefaultValue>5</DefaultValue>
					<Value>5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Scale</Name>
					<DefaultValue>100</DefaultValue>
					<Value>100</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Offset</Name>
					<DefaultValue>0</DefaultValue>
					<Value>0</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Time Scale</Name>
					<DefaultValue>10</DefaultValue>
					<Value>10</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Horizontal ruler</Name>
					<DefaultValue>true</DefaultValue>
					<Value>true</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Vertical ruler</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Multiview</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>512.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>1024.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x92c056a7, 0x2dc71aff)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x0020b3db)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>9</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>3</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000061ba, 0x00000f23)</Identifier>
			<Name>Signal Cleanup</Name>
			<AlgorithmClassIdentifier>(0xfe420cb6, 0x5f2ba4c3)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input Signal</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Filtered Signal</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>LowCutFrequency</Name>
					<DefaultValue>1</DefaultValue>
					<Value>1</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>HighCutFrequency</Name>
					<DefaultValue>100</DefaultValue>
					<Value>10</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>NotchLowFrequency</Name>
					<DefaultValue>48</DefaultValue>
					<Value>48</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>NotchHighFrequency</Name>
					<DefaultValue>52</DefaultValue>
					<Value>52</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x198dd621, 0xab7f153f)</Identifier>
					<Value>(0x40c92d63, 0xac62524f)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>208</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>800</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xc5ff4187, 0xffc5f432)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>4</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00006b6d, 0x00002690)</Identifier>
			<Name>Acquisition client</Name>
			<AlgorithmClassIdentifier>(0x35d225cb, 0x3e6e3a5f)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Experiment information</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Signal stream</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x013df452, 0xa3a8879a)</TypeIdentifier>
					<Name>Channel localisation</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6ab26b81, 0x0f8c02f3)</TypeIdentifier>
					<Name>Channel units</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x79a9edeb, 0x245d83fc)</TypeIdentifier>
					<Name>Acquisition server hostname</Name>
					<DefaultValue>${AcquisitionServer_HostName}</DefaultValue>
					<Value>${AcquisitionServer_HostName}</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Acquisition server port</Name>
					<DefaultValue>1024</DefaultValue>
					<Value>1024</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>128.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>928.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x0d4656c0, 0xc95b1fa8)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x00705418)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>5</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x0000710e, 0x0000507a)</Identifier>
			<Name>Signal Decimation</Name>
			<AlgorithmClassIdentifier>(0x012f4bea, 0x3be37c66)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input signal</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Output signal</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Decimation factor</Name>
					<DefaultValue>8</DefaultValue>
					<Value>16</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>304</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>768</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x5082af41, 0xd0fbf4cb)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00007e4e, 0x00006b7b)</Identifier>
			<Name>Filtered</Name>
			<AlgorithmClassIdentifier>(0x0055be5f, 0x087bdd12)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Data</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6ab26b81, 0x0f8c02f3)</TypeIdentifier>
					<Name>Channel Units</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x5de046a6, 0x086340aa)</TypeIdentifier>
					<Name>Display Mode</Name>
					<DefaultValue>Scan</DefaultValue>
					<Value>Scan</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x33a30739, 0x00d5299b)</TypeIdentifier>
					<Name>Auto vertical scale</Name>
					<DefaultValue>Per channel</DefaultValue>
					<Value>Per channel</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Scale refresh interval (secs)</Name>
					<DefaultValue>5</DefaultValue>
					<Value>5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Scale</Name>
					<DefaultValue>100</DefaultValue>
					<Value>100</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Offset</Name>
					<DefaultValue>0</DefaultValue>
					<Value>0</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Time Scale</Name>
					<DefaultValue>10</DefaultValue>
					<Value>10</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Horizontal ruler</Name>
					<DefaultValue>true</DefaultValue>
					<Value>true</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Vertical ruler</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Multiview</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>512.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>832.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x92c056a7, 0x2dc71aff)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x002fa512)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>9</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>3</Value>
				</Attribute>
			</Attributes>
		</Box>
	</Boxes>
	<Links>
		<Link>
			<Identifier>(0x000003a7, 0x000034db)</Identifier>
			<Source>
				<BoxIdentifier>(0x000014bf, 0x000034db)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005c5c, 0x00007610)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00000554, 0x0000661a)</Identifier>
			<Source>
				<BoxIdentifier>(0x000014bf, 0x000034db)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00007e4e, 0x00006b7b)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00001149, 0x0000397d)</Identifier>
			<Source>
				<BoxIdentifier>(0x0000710e, 0x0000507a)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000014bf, 0x000034db)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00001d33, 0x00002bb0)</Identifier>
			<Source>
				<BoxIdentifier>(0x00006b6d, 0x00002690)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000014bf, 0x000034db)</BoxIdentifier>
				<BoxInputIndex>2</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00003f04, 0x000045c3)</Identifier>
			<Source>
				<BoxIdentifier>(0x000014bf, 0x000034db)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005c5c, 0x00007610)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00005439, 0x000059a1)</Identifier>
			<Source>
				<BoxIdentifier>(0x00006b6d, 0x00002690)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000061ba, 0x00000f23)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x000056fd, 0x00004795)</Identifier>
			<Source>
				<BoxIdentifier>(0x000014bf, 0x000034db)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00007e4e, 0x00006b7b)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00005e38, 0x00005c99)</Identifier>
			<Source>
				<BoxIdentifier>(0x00006b6d, 0x00002690)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000014bf, 0x000034db)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00005f04, 0x0000559d)</Identifier>
			<Source>
				<BoxIdentifier>(0x000061ba, 0x00000f23)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x0000710e, 0x0000507a)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
	</Links>
	<Comments>
		<Comment>
			<Identifier>(0x00001653, 0x00002964)</Identifier>
			<Text>&lt;u&gt;&lt;b&gt;Note:&lt;/b&gt;&lt;/u&gt; be sure that the
&lt;i&gt;sampling rate&lt;/i&gt; and &lt;i&gt;sample count
per buffer&lt;/i&gt; you use in the &lt;u&gt;acquisition
server&lt;/u&gt; are compatible with the actual
&lt;i&gt;signal decimation factor&lt;/i&gt;</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>512</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>416</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x000028e8, 0x00003dee)</Identifier>
			<Text>&lt;u&gt;&lt;b&gt;&lt;big&gt;Overview&lt;/big&gt;&lt;/b&gt;&lt;/u&gt;

This scenario can be used in order
to check the quality of the signals
before starting an experiment.

One should &lt;u&gt;definitely&lt;/u&gt;
check the quality of the signals
and ensure that :

- &lt;b&gt;eye blinks&lt;/b&gt; are visible
- &lt;b&gt;jaw clenching&lt;/b&gt; are visible
- &lt;b&gt;alpha waves&lt;/b&gt; are visible when closing eyes</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>1184</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>272</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x000049b3, 0x00001e28)</Identifier>
			<Text>You can browse each box' documentation by selecting the box and pressing &lt;b&gt;F1&lt;/b&gt;</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>944</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>32</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00004e8c, 0x000041b6)</Identifier>
			<Text>The P300 XDawn scenarios are described in

http://openvibe.inria.fr/p300-speller-xdawn/</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>576.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>130.000000</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x000059b5, 0x00001524)</Identifier>
			<Text>The &lt;i&gt;Temporal Filter&lt;/i&gt;
and &lt;i&gt;Signal Decimation&lt;/i&gt;
boxes transform the signal
so you can see what is actually
used online.</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>512</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>288</Value>
				</Attribute>
			</Attributes>
		</Comment>
	</Comments>
	<Metadata>
		<Entry>
			<Identifier>(0x00000a98, 0x00002d74)</Identifier>
			<Type>(0x3bcce5d2, 0x43f2d968)</Type>
			<Data>[{"boxIdentifier":"(0x00007e4e, 0x00006b7b)","childCount":0,"identifier":"(0x0000440e, 0x00005957)","parentIdentifier":"(0xffffffff, 0xffffffff)","type":3},{"boxIdentifier":"(0x00005c5c, 0x00007610)","childCount":0,"identifier":"(0x00006bc9, 0x000050fa)","parentIdentifier":"(0xffffffff, 0xffffffff)","type":3}]</Data>
		</Entry>
	</Metadata>
	<Attributes>
		<Attribute>
			<Identifier>(0x237e56d2, 0x10cd68ae)</Identifier>
			<Value>590</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x4c90d4ad, 0x7a2554ec)</Identifier>
			<Value>635</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x54e45f5b, 0x76c036e2)</Identifier>
			<Value>293</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x790d75b8, 0x3bb90c33)</Identifier>
			<Value>Yann Renard</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x7b814cca, 0x271df6dd)</Identifier>
			<Value>783</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x8c1fc55b, 0x7b433dc2)</Identifier>
			<Value></Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x9f5c4075, 0x4a0d3666)</Identifier>
			<Value>Signal Monitoring</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf36a1567, 0xd13c53da)</Identifier>
			<Value>http://openvibe.inria.fr/p300-speller-xdawn/</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf6b2e3fa, 0x7bd43926)</Identifier>
			<Value>xDAWN P300 Speller</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf8034a49, 0x8b3f37cc)</Identifier>
			<Value>INRIA</Value>
		</Attribute>
	</Attributes>
</OpenViBE-Scenario>