OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Yann Renard, Jussi T. Lindgren
0x9f5c4075 = Data Acquisition
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  P300 Processing using LSL
Comment
  The P300 XDawn scenarios are described in

  http://openvibe.inria.fr/p300-speller-xdawn/
Comment
  The P300 Speller Visualisation
  sends the markers (stimulations) directly to
  Acquisition Server using TCP Tagging.
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. The
  data will later be used to train a spatial
  filter and a classifier for online use.

  The flast sequence will start after 20 sec.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. This will
  be repeated 10 times.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).

Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 10
  Number of trials = 5
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #2
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Sequence stimulations=#1, Target stimulations=#2 -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg

Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#4.Signal stream -> Signal Cleanup
  LowCutFrequency = 1
  HighCutFrequency = 10
  NotchLowFrequency = 48
  NotchHighFrequency = 52
-> Signal Decimation => #6
  Decimation factor = 16
Input stream 1=#4.Experiment information, Input stream 2=#6, Input stream 3=#4.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-xdawn-train.ov
  Use compression = false
Input signal=#6, Input stimulations=#4.Stimulations -> LSL Export
  Signal stream = openvibeSignal2
  Marker stream = openvibeMarkers2
Input signal=#6, Input stimulations=#4.Stimulations -> LSL Export (Gipsa)
  Stream name = openvibeSignal
  Stream type = EEG
#4.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
